/*
Created by BluePyOpt(1.12.47) at 2022-09-13 11:47:46.994871
*/
{load_file("stdrun.hoc")}
{load_file("import3d.hoc")}
/*
 * Check that global parameters are the same as with the optimization
 */
proc check_parameter(/* name, expected_value, value */){
  strdef error
  if($2 != $3){
    sprint(error, "Parameter %s has different value %f != %f", $s1, $2, $3)
    execerror(error)
  }
}
proc check_simulator() {
  check_parameter("celsius", 34, celsius)
  check_parameter("v_init", -65, v_init)
}

begintemplate cADpyr_L5TPC
  public init, morphology, geom_nseg_fixed, geom_nsec, gid
  public channel_seed, channel_seed_set
  public soma, dend, apic, axon, myelin
  create soma[1], dend[1], apic[1], axon[1], myelin[1]
  public nSecAll, nSecSoma, nSecApical, nSecBasal, nSecMyelinated, nSecAxonalOrig, nSecAxonal
  public CellRef, synHelperList, synlist
  objref this, CellRef, segCounts, synHelperList, synlist

  public all, somatic, apical, axonal, basal, myelinated, APC
  objref all, somatic, apical, axonal, basal, myelinated, APC

/*!
 * When clearing the model, the circular reference between Cells and CCells must be broken so the
 * entity watching reference counts can work.
 */
proc clear() { localobj nil
    CellRef = nil
}

proc init(/* args: morphology_dir, morphology_name */) {
  all = new SectionList()
  apical = new SectionList()
  axonal = new SectionList()
  basal = new SectionList()
  somatic = new SectionList()
  myelinated = new SectionList()

  synHelperList = new List()                                                     
  synlist = new List()

  //gid in this case is only used for rng seeding
  gid = $1

  //For compatibility with BBP CCells
  CellRef = this

  forall delete_section()

  if(numarg() >= 3) {
    load_morphology($s2, $s3)
  } else {
    load_morphology($s2, "cylindrical_morphology_29.0936.swc")
  }

  geom_nseg()
  indexSections()
  insertChannel()
  biophys()

  // Initialize channel_seed_set to avoid accidents
  channel_seed_set = 0
  // Initialize random number generators
  re_init_rng()
}

/*!
 * Assign section indices to the section voltage value.  This will be useful later for serializing
 * the sections into an array.  Note, that once the simulation begins, the voltage values will revert to actual data again.
 *
 * @param $o1 Import3d_GUI object
 */
proc indexSections() { local index
    index = 0
    forsec all {
        v(0.0001) = index
        index = index +1
    }
}

proc load_morphology(/* morphology_dir, morphology_name */) {localobj morph, import, sf, extension
  strdef morph_path
  sprint(morph_path, "%s/%s", $s1, $s2)

  sf = new StringFunctions()
  extension = new String()

  sscanf(morph_path, "%s", extension.s)
  sf.right(extension.s, sf.len(extension.s)-4)

  if( strcmp(extension.s, ".asc") == 0 ) {
    morph = new Import3d_Neurolucida3()
  } else if( strcmp(extension.s, ".swc" ) == 0) {
    morph = new Import3d_SWC_read()
  } else {
    printf("Unsupported file format: Morphology file has to end with .asc or .swc" )
    quit()
  }

  morph.quiet = 1
  morph.input(morph_path)

  import = new Import3d_GUI(morph, 0)
  import.instantiate(this)
}

/*
 * Assignment of mechanism values based on distance from the soma
 * Matches the BluePyOpt method
 */
proc distribute_distance(){local x localobj sl
  strdef stmp, distfunc, mech

  sl = $o1
  mech = $s2
  distfunc = $s3
  this.soma[0] distance(0, 0.5)
  sprint(distfunc, "%%s %s(%%f) = %s", mech, distfunc)
  forsec sl for(x, 0) {
    sprint(stmp, distfunc, secname(), x, distance(x))
    execute(stmp)
  }
}

proc geom_nseg() {
  this.geom_nsec() //To count all sections
  //TODO: geom_nseg_fixed depends on segCounts which is calculated by
  //  geom_nsec.  Can this be collapsed?
  this.geom_nseg_fixed(40)
  this.geom_nsec() //To count all sections
}

proc insertChannel() {
  forsec this.all {
    insert pas
  }
  forsec this.apical {
  }
  forsec this.axonal {
  }
  forsec this.basal {
  }
  forsec this.somatic {
    insert SKv3_1
    insert NaTg
  }
  forsec this.myelinated {
  }
}

proc biophys() {
  
  forsec CellRef.all {
  }
  
  forsec CellRef.apical {
  }
  
  forsec CellRef.axonal {
  }
  
  forsec CellRef.basal {
  }
  
  forsec CellRef.somatic {
    cm = 9.922417290481544
    Ra = 47.602292321816392
    gSKv3_1bar_SKv3_1 = 0.26619799225110619
    gNaTgbar_NaTg = 10.673843939514301
    vshiftm_NaTg = 13
    vshifth_NaTg = 15
    slopem_NaTg = 7
    g_pas = 0.00014234356176830631
    e_pas = -35.773091944723667
  }
  
  forsec CellRef.myelinated {
  }
  
}

func sec_count(/* SectionList */) { local nSec
  nSec = 0
  forsec $o1 {
      nSec += 1
  }
  return nSec
}

/*
 * Iterate over the section and compute how many segments should be allocate to
 * each.
 */
proc geom_nseg_fixed(/* chunkSize */) { local secIndex, chunkSize
  chunkSize = $1
  soma area(.5) // make sure diam reflects 3d points
  secIndex = 0
  forsec all {
    nseg = 1 + 2*int(L/chunkSize)
    segCounts.x[secIndex] = nseg
    secIndex += 1
    printf("secIndex: %d nseg: %d\n", secIndex, nseg)
  }
}

/*
 * Count up the number of sections
 */
proc geom_nsec() { local nSec
  nSecAll = sec_count(all)
  nSecSoma = sec_count(somatic)
  nSecApical = sec_count(apical)
  nSecBasal = sec_count(basal)
  nSecMyelinated = sec_count(myelinated)
  nSecAxonalOrig = nSecAxonal = sec_count(axonal)

  segCounts = new Vector()
  segCounts.resize(nSecAll)
  nSec = 0
  forsec all {
    segCounts.x[nSec] = nseg
    nSec += 1
    printf("nSec: %d nseg: %d\n", nSec, nseg)
  }
  printf("nSec of geom_nsec = %d\n", nSec)
}

/*
 * Replace the axon built from the original morphology file with a stub axon
 */



func hash_str() {localobj sf strdef right
  sf = new StringFunctions()

  right = $s1

  n_of_c = sf.len(right)

  hash = 0
  char_int = 0
  for i = 0, n_of_c - 1 {
     sscanf(right, "%c", & char_int)
     hash = (hash * 31 + char_int) % (2 ^ 31 - 1)
     sf.right(right, 1)
  }

  return hash
}

proc re_init_rng() {localobj sf
    strdef full_str, name

    sf = new StringFunctions()

    if(numarg() == 1) {
        // We received a third seed
        channel_seed = $1
        channel_seed_set = 1
    } else {
        channel_seed_set = 0
    }


}


endtemplate cADpyr_L5TPC